#########################
# SET MATERIAL DATABASE #
#########################
/gate/geometry/setMaterialDatabase ../data/GateMaterials_XCAT.db

#########
# WORLD #
#########
/gate/world/geometry/setXLength 400. cm
/gate/world/geometry/setYLength 400. cm
/gate/world/geometry/setZLength 400. cm
/gate/world/setMaterial Air

#######################################
# CT scanner for small animal imaging #
# 150x200 pixels                      #
# size of pixels : 0.5x0.5x1.0 mm3    #
# pixels are made up of silicon       #
#######################################
#/control/execute CTScanner.mac
/control/execute CTScanner_300400.mac

###################################
# phantom in rotation (1 deg/s) : #
#  * 1 water cylinder             #
#  * 4 balls                      #
###################################
#/control/execute phantom.mac
#/gate/waterCylinder/moves/insert rotation
#/gate/waterCylinder/rotation/setSpeed 0.03333 deg/s
#/gate/waterCylinder/rotation/setAxis 0 0 1

#/control/execute VoxelizedPhantom.mac
/control/execute Phantom_female_skinny.mac
#/control/execute Phantom_female_skinny_1.mac
#/control/execute Phantom_female_fat_1.mac
#/control/execute Phantom_female_fat.mac

###########
# PHYSICS #
###########
/control/execute physics.mac

#############
# DIGITIZER #
#############
/control/execute digitizer.mac

##########
# OUTPUT #
##########
#/control/execute output.mac
#/control/execute output_skinny.mac
#/control/execute output_skinny_60kVp_2.mac
#/control/execute output_skinny_90kVp_2.mac
#/control/execute output_skinny_120kVp_2.mac
/control/execute output_skinny_150kVp_2.mac

#############
# VERBOSITY #
#############
/control/execute verbose.mac

##################
# INITIALIZATION #
##################
/gate/run/initialize

############################
# VISUALIZATION PARAMETERS #
############################
#/control/execute visu.mac
/vis/disable

##############
# SOURCE GPS #
##############
#/control/execute source.mac
#/control/execute source_60kVp.mac
#/control/execute source_90kVp.mac
#/control/execute source_120kVp.mac
/control/execute source_150kVp.mac
#/control/execute source_1MeV_Mono.mac

###############
# ACQUISITION #
###############
/control/execute acquisition.mac

exit
